CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot endwith "_mask.tiff")
    Name to assign these images:Image
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_mask.tiff")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Mask
    Name the output object:Cell
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MeasureObjectNeighbors:[module_num:6|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityMultichannel:[module_num:7|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
    Select images to measure:Image
    Select objects to measure:Cell
    How many channels does the image have?:5

MeasureImageIntensityMultichannel:[module_num:8|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
    Select images to measure:Image
    Measure the intensity only from areas enclosed by objects?:No
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    How many channels does the image have?:5

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
